PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delay_discounting
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Lenovo/Desktop/Psy Lab/Delay Discounting/delay discouting excel/delay_discounting excel.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 28, 'delay': 73},
      {'reward_today': 19, 'future_reward': 32, 'delay': 82},
      {'reward_today': 24, 'future_reward': 40, 'delay': 52},
      {'reward_today': 12, 'future_reward': 23, 'delay': 82},
      {'reward_today': 24, 'future_reward': 28, 'delay': 15},
      {'reward_today': 10, 'future_reward': 30, 'delay': 21},
      {'reward_today': 27, 'future_reward': 47, 'delay': 37},
      {'reward_today': 29, 'future_reward': 40, 'delay': 71},
      {'reward_today': 26, 'future_reward': 47, 'delay': 63},
      {'reward_today': 12, 'future_reward': 25, 'delay': 36},
      {'reward_today': 6, 'future_reward': 18, 'delay': 12},
      {'reward_today': 24, 'future_reward': 26, 'delay': 68},
      {'reward_today': 8, 'future_reward': 19, 'delay': 25},
      {'reward_today': 16, 'future_reward': 18, 'delay': 29},
      {'reward_today': 10, 'future_reward': 30, 'delay': 6},
      {'reward_today': 20, 'future_reward': 29, 'delay': 18},
      {'reward_today': 15, 'future_reward': 19, 'delay': 83},
      {'reward_today': 22, 'future_reward': 24, 'delay': 1},
      {'reward_today': 30, 'future_reward': 52, 'delay': 51},
      {'reward_today': 10, 'future_reward': 12, 'delay': 55},
      {'reward_today': 24, 'future_reward': 33, 'delay': 17},
      {'reward_today': 8, 'future_reward': 17, 'delay': 38},
      {'reward_today': 21, 'future_reward': 35, 'delay': 35},
      {'reward_today': 5, 'future_reward': 14, 'delay': 50},
      {'reward_today': 26, 'future_reward': 49, 'delay': 46},
      {'reward_today': 8, 'future_reward': 24, 'delay': 42},
      {'reward_today': 10, 'future_reward': 20, 'delay': 81}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
    Routine trial
  LoopTerminator trials
