PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = wmtrial
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine SearchRoutine
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    CodeComponent arrayCode
      Code Type = Auto->JS
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      Begin Routine:
        # ----- GRID POSITIONS -----
        # You define a list of possible (x,y) positions.
        # These form your grid.

        grid_positions = [
            (-0.6, 0.4), (-0.3, 0.4), (0.0, 0.4), (0.3, 0.4), (0.6, 0.4),
            (-0.6, 0.0), (-0.3, 0.0), (0.0, 0.0), (0.3, 0.0), (0.6, 0.0),
            (-0.6,-0.4), (-0.3,-0.4), (0.0,-0.4), (0.3,-0.4), (0.6,-0.4)
        ]

        # Use only as many positions as you want:
        import random
        positions = random.sample(grid_positions, 15)  # choose 12 positions per trial

        # ----- TARGET PRESENCE -----
        # The conditions file will have a column `targetPresent`
        # with values 0 or 1.

        target_present = int(targetPresent)

        if target_present == 1:
            target_pos = random.choice(positions)
        else:
            target_pos = None

        # ----- CREATE SHAPES -----
        # Create target and distractor objects dynamically.
        # These objects are drawn in Each Frame tab.

        shapes_to_draw = []

        # Add target if present
        if target_pos:
            target = visual.Polygon(
                win,
                edges=4,
                ori=45,
                size=0.10,
                fillColor='red',
                lineColor='red',
                pos=target_pos
            )
            shapes_to_draw.append(target)

        # Add distractors
        for pos in positions:
            if pos != target_pos:
                distractor = visual.Circle(
                    win,
                    radius=0.04,
                    fillColor='green',
                    lineColor='green',
                    pos=pos
                )
                shapes_to_draw.append(distractor)

        # ----- SINGLETON DISTRACTOR OPTIONAL -----
        # If your conditions file has a column "singleton"
        # with values 'present'/'absent'
        # you can add:

        if singleton == 'present':
            # choose a distractor to turn blue
            non_target_positions = [p for p in positions if p != target_pos]
            if non_target_positions:
                s_pos = random.choice(non_target_positions)
                singleton_stim = visual.Circle(
                    win,
                    radius=0.04,
                    fillColor='blue',
                    lineColor='blue',
                    pos=s_pos
                )
                shapes_to_draw.append(singleton_stim)
      Each Frame:
        for s in shapes_to_draw:
            s.draw()
    KeyboardComponent resp
      allowedKeys = 'p','a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MemoryTask
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    TextComponent digitlist
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $digits
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  Routine RecallTest
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Was " + str(int(test_digit)) + " in the list?"
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    KeyboardComponent test_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ExperrimentEnd
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    TextComponent ThankYou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank You!
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  Routine Instructions
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    TextComponent instr
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        For the experiment, each trial consists of two tasks, a memory task which will be followed by a visual search task.

        For the memory task, you will be presented a list of numbers, your task is to memorize the list of numbers. Some trials may not require any memory task. For the visual search task, you are required to search for the RED 'target' circle amongst GREEN 'distractors'. Some trials  may or may not contain a BLUE 'singleton'. Your goal is to ignore the distractor and the singleton and detect the target as fast as possible.

        Press 'P' if the target is present and 'A' if the target is absent.

        After the Visual Search task you will be required to give a recall/ recognition test. Press 'Y' if the statement is true and 'N' if false.

        Press 'Space' when your ready to begin with the experiment
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Lenovo/Desktop/Psy Lab/Solo Project/solo-project excel/wmconds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'targetPresent': 0, 'singleton': 'present', 'digits': '+', 'test_digit': 9.0},
      {'targetPresent': 0, 'singleton': 'absent', 'digits': '9 4 2 0 7 3', 'test_digit': 4.0},
      {'targetPresent': 0, 'singleton': 'present', 'digits': '4 9 0', 'test_digit': 904.0},
      {'targetPresent': 1, 'singleton': 'absent', 'digits': '6 5 4', 'test_digit': 6.0},
      {'targetPresent': 0, 'singleton': 'absent', 'digits': '2 9 5', 'test_digit': 5.0},
      {'targetPresent': 1, 'singleton': 'present', 'digits': '+', 'test_digit': 9.0},
      {'targetPresent': 1, 'singleton': 'present', 'digits': '+', 'test_digit': 8.0},
      {'targetPresent': 1, 'singleton': 'present', 'digits': '8 5 9', 'test_digit': 9.0},
      {'targetPresent': 0, 'singleton': 'present', 'digits': '1 4 2 0 9 6', 'test_digit': 1.0},
      {'targetPresent': 1, 'singleton': 'absent', 'digits': '0 6 7 9 8 5', 'test_digit': 9670.0},
      {'targetPresent': 0, 'singleton': 'absent', 'digits': '+', 'test_digit': 4.0},
      {'targetPresent': 1, 'singleton': 'present', 'digits': '5 8 6 4 0 3', 'test_digit': 3056.0},
      {'targetPresent': 1, 'singleton': 'absent', 'digits': '6 8 3 7 2 9', 'test_digit': 9862.0},
      {'targetPresent': 1, 'singleton': 'present', 'digits': '7 9 0 5 4 8', 'test_digit': 4709.0},
      {'targetPresent': 0, 'singleton': 'present', 'digits': '1 6 4', 'test_digit': 416.0},
      {'targetPresent': 1, 'singleton': 'absent', 'digits': '+', 'test_digit': 5722.0},
      {'targetPresent': 0, 'singleton': 'present', 'digits': '9 0 4', 'test_digit': 49.0}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
    Routine MemoryTask
    Routine SearchRoutine
    Routine RecallTest
  LoopTerminator trials
  Routine ExperrimentEnd
