PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = stroop1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 6
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      storeCorrect = True
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  Routine ins
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Welcome!

        Press 'r' for red coloured text and 'b' for blue coloured text
  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = Thank you
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Lenovo/Desktop/Psy Lab/Stroop Tasks/stroop_excels/stroop1_conditions.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'stim_condition': 'c', 'correct_res': 'r'},
      {'word': 'BLUE', 'colour': 'blue', 'stim_condition': 'c', 'correct_res': 'b'},
      {'word': 'RED', 'colour': 'blue', 'stim_condition': 'i', 'correct_res': 'b'},
      {'word': 'BLUE', 'colour': 'red', 'stim_condition': 'i', 'correct_res': 'r'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
