PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = visual_search
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5,random()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5:
            num_distractor = 5
            thisExp.addData('num_distractor',num_distractor)
        else:
            num_distractor = 10
            thisExp.addData('num_distractor',num_distractor)

        distractors = []

        for i in range(num_distractor):

            distractor = visual.TextStim(win=win, name='distractor',
                text='L',
                font='Arial',
                pos=(random()-0.5,random()-0.5), draggable=False, height=0.05, wrapWidth=None, ori=randint(1,360),
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-2.0);


            distractors.append(distractor)


        for distractor in distractors:
            distractor.setAutoDraw(True)
      End Routine:
        for distractor in distractors:
            distractor.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
